PsychoPy2experiment version="2024.2.3"
Settings
  Audio lib = ptb
  End Message = 实验结束，您可以关闭浏览器
  Experiment info = {'被试号': 'f"{randint(0, 999999):06.0f}"', '条件': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = 这是一个实验
  frameRate = 60
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 0
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Routines
  Routine ins_1
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    TextComponent instruction_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        现在是一个新任务，准备好按空格键
        如果你准备好了，现在按键开始实验！！
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ins_2
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    TextComponent ins
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        现在你需要开始一个新的任务。
        请根据你看到的文字做出反应。
        看到‘左’，按F键，看到‘右’ 按J 键。
        下面将开始练习的部分。按空格键继续。
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice
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    TextComponent text
      letterHeight = 0.05
      pos [set every repeat] = position
      startVal [time (s)] = 0
      text [set every repeat] = $word
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'f','j'
      correctAns = $response
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # 初始化反馈文本为空
        feedbackText = ''

        # 初始化
        correctCount = 0
        totalTrials = 0
      End Routine:
        # 记录反馈

        # 检查是否按下了正确的按键
        if key_resp_3.corr == 1:  # 如果正确
            feedbackText = '正确'
            correctCount += 1
        else:  # 如果错误
            feedbackText = '错误'

        totalTrials += 1  # 总试次数增加

        accuracy = (correctCount / totalTrials) * 100  # 计算正确率

        thisExp.addData('feedback', feedbackText)
        # 设置反馈文本
        if accuracy == 100:
            feedback = '恭喜通过训练'
            trainingPassed = True  # 设置标志变量为 True，表示通过训练

        else:
            feedback = '没有通过，再来一次训练'
            trainingPassed = False  # 继续训练
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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  Routine thanks
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 感谢参与实验
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = JS
      Begin JS Routine:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;
        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';
        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;
        // Convert data object to CSV
        let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
            return Object.values(it).toString()
        }).join('\n')

        // Send data to OSF via DataPipe
        console.log('Saving data...');
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
            },
            body: JSON.stringify({
                experimentID: 'iahmvvBWVDZl', // ⭑ UPDATE WITH YOUR DATAPIPE EXPERIMENT ID ⭑
                filename: filename,
                data: data,
            }),
        }).then(response => response.json()).then(data => {
            // Log response and force experiment end
            console.log(data);
            quitPsychoJS();
        })
  Routine real_exp
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    TextComponent text_4
      letterHeight = 0.05
      pos [set every repeat] = position
      startVal [time (s)] = 0
      text [set every repeat] = $word
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    KeyboardComponent key_resp_4
      allowedKeys [set every repeat] = 'f','j'
      correctAns = $response
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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  Routine good_or_bad
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        # 初始化
        correctCount = 0
        totalTrials = 0

        #如果训练通过，强制终止外层循环
        if trainingPassed:
            trials_3.finished = True  # 结束外层 Loop
  Routine feedbacks
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    TextComponent text_7
      letterHeight = 0.05
      startEstim = 0
      startVal [time (s)] = 0
      text [set every repeat] = $feedbackText
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine cross
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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Flow
  Routine ins_1
  Routine ins_2
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = sequential
    nReps = 9999
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    conditions:
      [{'feedback': '你通过了训练'},
      {'feedback': '你未通过训练，再来一次'}]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = conditions.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'word': 'left', 'position': [-0.5, 0], 'response': 'f'},
        {'word': 'left', 'position': [0.5, 0], 'response': 'f'},
        {'word': 'right', 'position': [-0.5, 0], 'response': 'j'},
        {'word': 'right', 'position': [0.5, 0], 'response': 'j'}]
      Routine practice
      Routine feedbacks
    LoopTerminator trials
    Routine good_or_bad
  LoopTerminator trials_3
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'word': 'left', 'position': [-0.5, 0], 'response': 'f'},
      {'word': 'left', 'position': [0.5, 0], 'response': 'f'},
      {'word': 'right', 'position': [-0.5, 0], 'response': 'j'},
      {'word': 'right', 'position': [0.5, 0], 'response': 'j'}]
    Routine real_exp
  LoopTerminator trials_2
  Routine thanks
